<stickToImageJ>
<noGrid>
<DnD> // allow droping images into the BoulinTab2 window to open them, just like Fiji tool bar



<line>
<button>
label=Save
icon=noicon
arg=run("Save")

------

<button>
label=Save as
icon=noicon
arg=run("Tiff...");

------

<button>
label=Close All
icon=noicon
arg=run("Close All");

------

<button>
label=Copy
icon=noicon
arg=run("Copy to System");

------
<separator>
<button>
label=Crop
icon=noicon
arg=run("Crop");

------

<button>
label=Duplicate
icon=noicon
arg=run("Duplicate...", "duplicate");

------

<button>
label=B&C/channels
icon=noicon
arg=<macro>

run("Brightness/Contrast...");
run("Channels Tool...");

</macro>

------

<button>
label=Merge
icon=noicon
arg=run("Merge Channels...");

--------


<button>
label=Split
icon=noicon
arg=run("Split Channels");

--------
<separator>
<button>
label=Rotate
icon=noicon
arg=run("Rotate... ");

--------

<button>
label=Rotate axis
icon=noicon
arg=<macro>     
type = selectionType();

if (type == -1) {
    print("No line drawn");
    close();
    continue; // Skip this image if no line is drawn
}

// Get line coordinates and calculate rotation angle
getLine(x1, y1, x2, y2, lineWidth);

angle = -90 - 180 * atan2((y2 - y1), (x2 - x1)) / PI;

// Rotate image to align with the axon
run("Rotate...", "angle=" + angle + " grid=1 interpolation=Bilinear enlarge stack");

// Get current stack position and dimensions
Stack.getPosition(channel, slice, frame);
Stack.getDimensions(width, height, channels, slices, frames);

// Force refresh by switching channels
if (channels > 1) {

    nextChannel = channel + 1;

    if (nextChannel > channels)
        nextChannel = channel - 1;

    if (nextChannel >= 1) {
        Stack.setChannel(nextChannel);
        Stack.setChannel(channel);
    }
}

// Close Results window if it exists
if (isOpen("Results")) {
    selectWindow("Results");
    run("Close");
}
</macro>
--------

</line>
<line>

<button>
label=on/off
icon=noicon
arg=<macro>

Stack.getDimensions(width, height, channels, slices, frames);

Stack.getPosition(channel, slice, frame);

active = "";
Stack.getActiveChannels(active);

// sécurité si vide
if (active == "")
    active = "11110000";

// construire nouvelle chaîne
newActive = "";

for (i = 0; i < lengthOf(active); i++) {

    if (i == channel - 1) {

        // toggle 0 ↔ 1
        if (substring(active, i, i+1) == "1")
            newActive += "0";
        else
            newActive += "1";

    } else {
        newActive += substring(active, i, i+1);
    }
}

Stack.setActiveChannels(newActive);
</macro>

--------------

<button>
label=previous chanel
icon=noicon
arg=<macro>
Stack.getDimensions(width, height, channels, slices, frames);

// Position actuelle
Stack.getPosition(channel, slice, frame);

// Canal suivant
nextChannel = channel - 1;

// Revenir au premier si on dépasse
if (nextChannel == 0)
    nextChannel = channels;

// Aller au canal suivant
Stack.setPosition(nextChannel, slice, frame);
getMinAndMax(min, max);
setMinAndMax(min, max);

</macro>

------

<button>
label=next chanel
icon=noicon
arg=<macro>

Stack.getDimensions(width, height, channels, slices, frames);


// Position actuelle
Stack.getPosition(channel, slice, frame);

// Canal suivant
nextChannel = channel + 1;

// Revenir au premier si on dépasse
if (nextChannel > channels)
    nextChannel = 1;

// Aller au canal suivant
Stack.setPosition(nextChannel, slice, frame);
getMinAndMax(min, max);
setMinAndMax(min, max);


</macro>

---------

<separator>

<button>
label=Auto
icon=noicon
arg=run("Enhance Contrast", "saturated=0.35");

----------------------------------

<button>
label=Reset
icon=noicon
arg=resetMinAndMax;

--------
<separator>
<button>
label=Z Project
icon=noicon
arg=run("Z Project...");

--------

<separator>
<button>
label=MCZ
icon=noicon
arg=<macro>

// Determine the image processing steps to run 
Dialog.create("Choice of steps");
Dialog.addMessage("Choose your steps");
Dialog.addCheckbox("Merge", false);
Dialog.addCheckbox("Crop", false);
Dialog.addCheckbox("Projection Z", false);
Dialog.show();

// Get user choices
mergeChecked = Dialog.getCheckbox();
cropChecked = Dialog.getCheckbox();
projectionZChecked = Dialog.getCheckbox();

// MERGE
 if (mergeChecked) {

showMessage("click on *OK* to choose input folder");
input1 = getDirectory("choose input folder"); // Choose the folder with bases image
print(input1);


list1 = getFileList(input1);

options = newArray("Red", "Green", "Blue", "Magenta", "Yellow", "Cyan", "Grays", "None");
channels = newArray("Channel 1", "Channel 2", "Channel 3", "Channel 4", "Channel 5");

option = newArray("TIF", "ND", "LIF", "OBF");

Dialog.create("Choose image type");
Dialog.addMessage("Select the image type");
Dialog.addChoice("Image Type", option, option[0]);
Dialog.show();

imageTypeChoice = Dialog.getChoice();
	
	ndCount = 0 ;
	tifCount = 0 ;
	obfCount= 0 ;
	
for (i=0; i<list1.length; i++){
	
// for TIF
if (imageTypeChoice == "TIF") {
	showMessage("click on *OK* to choose output folder");
output1 = getDirectory("choose output folder"); // Choose the folder with bases image
print(output1);
	
	if (endsWith(list1[i], ".tif") ) {
		tifCount++;
    open(input1 + list1[i]);   
    setBatchMode(true); //turn on batch mode.	
		if (tifCount == 1) {
			setBatchMode(false); //turn on batch mode.
			// Get user choices for channel colors
			run("Channels Tool...");
                waitForUser("Note your chanels color \nThen press OK");
                Dialog.create("Merge channels");
                Dialog.addMessage("Choose the color for your channels");
                for (j = 0; j < 5; j++) {
                    Dialog.addChoice(channels[j], options, options[7]);
                }
                Dialog.show();
                channelColors = newArray();
                for (j = 0; j < 5; j++) {
                    channelColors[j] = Dialog.getChoice();
                }
                selectWindow("Channels");
                    run("Close");
            }		
		imageTitle1 = File.nameWithoutExtension;
            Property.set("CompositeProjection", "Sum");
            Stack.setDisplayMode("composite");

            for (j = 0; j < 5; j++) {
                if (channelColors[j] != "none") {
                    Stack.setChannel(j + 1);
                    run(channelColors[j]);
                }
            }
		// Save with the original name with MERGE_ in front
		saveAs("Tiff", output1 + "MERGE_" + imageTitle1);
		run("Close All");
    }
    }
    

// for LIF
if (imageTypeChoice == "LIF") {
	if (endsWith(list1[i], ".lif") ) {
		showMessage("click on *OK* to choose output folder");
output1 = getDirectory("choose output folder"); // Choose the folder with bases image
print(output1);
                
var svccCounter = 0;
    file = input1 + list1[i];

run("Bio-Formats Macro Extensions");

Ext.setId(file);

Ext.getSeriesCount(nSeries);
seriesToOpen = newArray(nSeries);  // Initialisation du tableau avec une taille appropriée
sIdx = 0;

// Boucle pour ajouter toutes les séries à ouvrir
for (i = 0; i < nSeries; i++) {
    seriesToOpen[sIdx++] = i + 1;  // Ajouter toutes les séries, en utilisant un index ajusté de +1
}

Array.print(seriesToOpen);

for (s = 0; s < seriesToOpen.length; s++) {
    run("Bio-Formats Importer", "open=[" + file + "] autoscale color_mode=Composite rois_import=[ROI manager] view=Hyperstack stack_order=XYCZT series_list=" + seriesToOpen[s]);
setBatchMode(true); //turn on batch mode.
 if (s == 0) {
 	setBatchMode(false); //turn off batch mode.
 	run("Channels Tool...");
                    waitForUser("Note your channels color \nThen press OK");
                    Dialog.create("Merge channels");
                    Dialog.addMessage("Choose the color for your channels");
                    for (k = 0; k < 5; k++) {
                        Dialog.addChoice(channels[k], options, options[7]);
                    }
                    Dialog.show();
                    channelColors = newArray();
                    for (k = 0; k < 5; k++) {
                        channelColors[k] = Dialog.getChoice();
                    }
                    selectWindow("Channels");
                    run("Close");
                }
                // Set up the composite mode for the image
		        imageTitle1 = File.nameWithoutExtension;
		        imageTitle1bis = getTitle();
                Property.set("CompositeProjection", "Sum");
                Stack.setDisplayMode("composite");

                // Apply the selected channel colors
                for (k = 0; k < 5; k++) {
                    if (channelColors[k] != "none") {
                        Stack.setChannel(k + 1);
                        run(channelColors[k]);
                    }
                }

 if (imageTitle1bis.endsWith("SVCC")) {
        // Save the image with "svg" in the filename and same sequence number
        svccCounter++;
        saveAs("Tiff", output1 + "MERGE_" + imageTitle1 + "_" + (s + 1 - svccCounter) + "_SVCC");
    } else {
                // Save the image with the prefix "MERGE_"                
                saveAs("Tiff", output1 + "MERGE_" + imageTitle1 + "_" + (s + 1 - svccCounter));
}
run("Close All");
}
}
}
// for ND
if (imageTypeChoice == "ND") {
	showMessage("click on *OK* to choose output folder");
output1 = getDirectory("choose output folder"); // Choose the folder with bases image
print(output1);

		if (endsWith(list1[i], ".nd") ) {
			ndCount++;
run("Bio-Formats Importer", "open=[" + input1 + list1[i] + "] autoscale color_mode=Composite view=Hyperstack stack_order=XYCZT");	
setBatchMode(true); //turn on batch mode.	
		if (ndCount == 1) {
			setBatchMode(false); //turn on batch mode.
			// Get user choices for channel colors
			run("Channels Tool...");
                waitForUser("Note your chanels color \nThen press OK");
                Dialog.create("Merge channels");
                Dialog.addMessage("Choose the color for your channels");
                for (j = 0; j < 5; j++) {
                    Dialog.addChoice(channels[j], options, options[7]);
                }
                Dialog.show();
                channelColors = newArray();
                for (j = 0; j < 5; j++) {
                    channelColors[j] = Dialog.getChoice();
                }
                selectWindow("Channels");
                    run("Close");
            }		
		imageTitle1 = File.nameWithoutExtension;
            Property.set("CompositeProjection", "Sum");
            Stack.setDisplayMode("composite");

            for (j = 0; j < 5; j++) {
                if (channelColors[j] != "none") {
                    Stack.setChannel(j + 1);
                    run(channelColors[j]);
                }
            }
		// Save with the original name with MERGE_ in front
		saveAs("Tiff", output1 + "MERGE_" + imageTitle1);
		run("Close All");
	}
	}
	
	if (imageTypeChoice == "OBF") {
    if (endsWith(list1[i], ".obf")) {
    	
    	run("Bio-Formats Macro Extensions");
    	showMessage("click on *OK* to choose output folder");
output1 = getDirectory("choose output folder"); // Choose the folder with bases image
print(output1);
        
        cheminFichier = input1 + list1[i];
        
        imagetitle = File.getNameWithoutExtension(cheminFichier);
        
        // Initialise Bio-Formats sur ce fichier pour lire ses métadonnées
        Ext.setId(cheminFichier);
        
        // Récupère automatiquement le nombre total de séries
        Ext.getSeriesCount(nSeries);
        
nChannels = 0;
firstSeriesRoot = "";

// On active le mode batch pour que l'utilisateur ne voie pas les images s'ouvrir et se fermer
setBatchMode(true);

// On va juste tester les 6 premières séries (on n'a pas besoin de tester les 300)
for (testIdx = 1; testIdx <= 6; testIdx++) {
    
    // 1. On ouvre temporairement la série en cours
    optionsTest = "open=[" + cheminFichier + "] autoscale color_mode=Grayscale view=Hyperstack stack_order=XYCZT series_" + testIdx;
    run("Bio-Formats Importer", optionsTest);
    
    // 2. On récupère le VRAI titre de la fenêtre ouverte (Garanti 100% String)
    vraiNomImage = getTitle(); 
    
    print("Série " + testIdx + " ouverte. Titre détecté : " + vraiNomImage);
    
    if (testIdx == 1) {
        // On extrait la racine du titre de la première image
        if (lengthOf(vraiNomImage) > 10) {
            firstSeriesRoot = substring(vraiNomImage, 0, lengthOf(vraiNomImage) - 10);
        } else {
            firstSeriesRoot = vraiNomImage;
        }
        print("-> Racine mémorisée : " + firstSeriesRoot);
        
        close(); // On referme l'image test
    } 
    else {
        // On compare le titre de l'image actuelle avec la racine de la première
        if (!startsWith(vraiNomImage, firstSeriesRoot)) {
            close(); // On referme l'image test avant de partir
            print("-> [STOP] Changement de groupe détecté à la série : " + testIdx);
            break; // Rupture ! On sort de la boucle de test
        }
        close(); // On referme l'image test
    }
    nChannels++;
}

setBatchMode(false); // On désactive le mode batch pour la suite

print("==> Détection automatique réussie : " + nChannels + " canaux détectés par groupe.");
close("*");

        indexMerge = 1;
        
        // 4. Boucle principale qui avance de 3 en 3
        for (s = 0; s < nSeries; s += nChannels) {
        	obfCount++;
            setBatchMode(true);
            
            // --- OUVERTURE DYNAMIQUE DES SÉRIES ---
            for (ch = 0; ch < nChannels; ch++) {
                seriesIndex = s + ch + 1; // Index de la série à ouvrir (commence à 1)
                
                // On s'assure qu'on ne dépasse pas le nombre total de séries disponibles
                if (seriesIndex <= nSeries) {
                    optionsCh = "open=[" + cheminFichier + "] autoscale color_mode=Grayscale view=Hyperstack stack_order=XYCZT series_" + seriesIndex;
                    run("Bio-Formats Importer", optionsCh);
                    rename("C" + (ch + 1)); // Renomme dynamiquement C1, C2, C3, C4...
                }
            }
            
            // --- CONSTRUCTION DE LA COMMANDE DE FUSION (MERGE) ---
            mergeString = "";
            for (ch = 0; ch < nChannels; ch++) {
                mergeString += "c" + (ch + 1) + "=C" + (ch + 1) + " ";
            }
            mergeString += "create"; // Exemple final : "c1=C1 c2=C2 c3=C3 c4=C4 create"
            
            // Exécution du merge avec la chaîne construite à la volée
            run("Merge Channels...", mergeString);
            
            
            
            if (obfCount == 1) {
 	setBatchMode(false); //turn off batch mode.
 	run("Channels Tool...");
                    waitForUser("Note your channels color \nThen press OK");
                    Dialog.create("Merge channels");
                    Dialog.addMessage("Choose the color for your channels");
                    for (k = 0; k < nChannels; k++) {
                        Dialog.addChoice(channels[k], options, options[7]);
                    }
                    Dialog.show();
                    channelColors = newArray();
                    for (k = 0; k < nChannels; k++) {
                        channelColors[k] = Dialog.getChoice();
                    }
                    selectWindow("Channels");
                    run("Close");
                    setBatchMode(true);
                }
                
            for (k = 0; k < nChannels; k++) {
                    if (channelColors[k] != "none") {
                        Stack.setChannel(k + 1);
                        run(channelColors[k]);
                    }
                }
            // --- SAUVEGARDE ---
            // CORRECTION 2 : Ajout de la parenthèse fermante manquante à la fin de la ligne
            saveAs("Tiff", output1 + "MERGE_" + imagetitle + "_" + indexMerge + ".tif");
            
            // Force la fermeture de l'image fusionnée avant le groupe suivant
            close();
            run("Close All");
            
            // On augmente l'index pour le prochain groupe
            indexMerge++;
        }
    }
}
}	
	setBatchMode(false);
}



// CROP
if (cropChecked) {
setBatchMode(false);

if (!mergeChecked) {
   showMessage("click on *OK* to choose input folder");
input2 = getDirectory("choose input folder"); // Choose the folder with bases image
print(input2);

showMessage("click on *OK* to choose output folder");
output2 = getDirectory("choose output folder"); // Choose the folder with bases image
print(output2);

option = newArray("TIF", "ND", "LIF");

Dialog.create("Choose image type");
Dialog.addMessage("Select the image type");
Dialog.addChoice("Image Type", option, option[0]);
Dialog.show();

imageTypeChoice = Dialog.getChoice();

    }
    
else {
input2 = output1 ;

showMessage("click on *OK* to choose output folder");
output2 = getDirectory("choose output folder"); // Choose the folder with bases image
print(output2);

imageTypeChoice = "TIF";
}

list2 = getFileList(input2);

for (i=0; i<list2.length; i++){
	
// for TIF	
	if (imageTypeChoice == "TIF") {
	if (endsWith(list2[i], ".tif") ) {
    open(input2 + list2[i]);
    imageTitle = getTitle();
crop(imageTitle);
}}

// for nd
    if (imageTypeChoice == "ND") {
	if (endsWith(list2[i], ".nd") ) {
run("Bio-Formats Importer", "open=[" + input2 + list2[i] + "] autoscale color_mode=Composite view=Hyperstack stack_order=XYCZT");
imageTitle = getTitle();
crop(imageTitle);
}}
    
// for lif    
    if (imageTypeChoice == "LIF") {
	if (endsWith(list2[i], ".lif") ) {
    var svccCounter = 0;
    file = input2 + list2[i];
run("Bio-Formats Macro Extensions");
Ext.setId(file);
Ext.getSeriesCount(nSeries);
seriesToOpen = newArray(nSeries);  // Initialisation du tableau avec une taille appropriée
sIdx = 0;
// Boucle pour ajouter toutes les séries à ouvrir
for (j = 0; j < nSeries; j++) {
    seriesToOpen[sIdx++] = j + 1;  // Ajouter toutes les séries, en utilisant un index ajusté de +1
}
Array.print(seriesToOpen);
for (s = 0; s < seriesToOpen.length; s++) {
    run("Bio-Formats Importer", "open=[" + file + "] autoscale color_mode=Composite rois_import=[ROI manager] view=Hyperstack stack_order=XYCZT series_list=" + seriesToOpen[s]);
imageTitle = getTitle();
crop(imageTitle);
}}}
 
    function crop(imageTitle) {
    originalImageTitle = getTitle();
    		imageTitle2 = File.nameWithoutExtension;
    		getDimensions(w, h, c, z, t);

      run("Duplicate...", "title=Dupli.tif duplicate"); // We duplicate the image and rename it "Dupli."
 // Duplicate the image and rename it "Dupli."
    selectImage("Dupli.tif");
    makeRectangle(0, 0, 200, 200); // Create a Rectangle on the duplicate image
    // Open ROI manager
    run("ROI Manager...");
    // Wait for user to add his ROI to ROI manager
    waitForUser("Create the ROIs on your image and add them to ROI manager. Then press OK");
    
    //Get total ROIs number
    nROIs = roiManager("count");
    // Browse each ROI
    
    for (roi=0; roi<nROIs; roi++) {
        // Select curent ROI
      selectImage(originalImageTitle);  
      run("Duplicate...", "title=Dupli.tif duplicate"); // We duplicate the image and rename it "Dupli."
	  selectImage("Dupli.tif");
      roiManager("select", roi);


        // Crop duplicate image
        run("Crop", "stack");
        run("Stack to Hyperstack...", "order=xyczt(default) channels="+c+" slices="+z+" frames="+t+" display=Composite");



// for lif
 if (imageTypeChoice == "LIF") {       
         if (originalImageTitle.endsWith("SVCC")) {
        // Save the image with "svcc" in the filename and same sequence number
        svccCounter++;
        saveAs("Tiff", output2 + "CROP_" + imageTitle2 + "_" + (s + 1 - svccCounter) + "_SVCC" + "_ROI" + roi+1);
    } else {
                // Save the image with the prefix "MERGE_"                
                saveAs("Tiff", output2 + "CROP_" + imageTitle2 + "_" + (s + 1 - svccCounter) + "_ROI" + roi+1);
}
}
        
	else {
        saveAs("Tiff", output2 + "CROP_" + imageTitle2 + "_ROI" + roi+1);
       
    }
    close(); 

}
selectWindow("ROI Manager");
run("Close");
run("Close All");
}
}
}

// Z PROJECTION
if (projectionZChecked) {
setBatchMode(false);

if (!cropChecked) {
        if(!mergeChecked) {
        	showMessage("click on *OK* to choose input folder");
input3 = getDirectory("choose input folder"); // Choose the folder with bases image
print(input3);
showMessage("click on *OK* to choose output folder");
output3 = getDirectory("choose output folder"); 
print(output3);
option = newArray("TIF", "ND", "LIF");
Dialog.create("Choose image type");
Dialog.addMessage("Select the image type");
Dialog.addChoice("Image Type", option, option[0]);
Dialog.show();
imageTypeChoice = Dialog.getChoice();
        }
        else {
input3 = output1;
showMessage("click on *OK* to choose output folder");
output3 = getDirectory("choose output folder"); // Choose the folder with bases image
print(output3);
imageTypeChoice = "TIF";
        }
}
else {
input3 = output2;
showMessage("click on *OK* to choose output folder");
output3 = getDirectory("choose output folder"); // Choose the folder with bases image
print(output3);
imageTypeChoice = "TIF";
}

filePath = output3 + "stack data.csv";  // CSV file name

// Open or create the CSV file
// Vérifier si le fichier CSV existe déjà
csvContent = "";
if (File.exists(filePath)) {
    // Lire le contenu existant pour l'ajouter ensuite
    csvContent = File.openAsString(filePath);
} else {
    // Si le fichier n'existe pas, ajouter l'en-tête des colonnes
    csvContent = "Imagename" + "," + "zBeg" + "," + "zEnd" + "\n";
}
File.saveString(csvContent, filePath);

list3 = getFileList(input3);

projectionType = newArray("Max Intensity", "Sum Slices", "Min Intensity", "Average Intensity", "Standard Deviation", "Median");
        Dialog.create("Select Projection Type");
        Dialog.addChoice("Projection Type:", projectionType, projectionType[0]);
        Dialog.show();
        
        // Récupérer le choix de l'utilisateur
        projectionTypechoice = Dialog.getChoice();

for (i=0; i<list3.length; i++){
	
	if (imageTypeChoice == "TIF") {
	if (endsWith(list3[i], ".tif") ) {
 open(input3 + list3[i]);
    imageTitle4 = getTitle();
    imagename = getTitle();
zproj(imageTitle4);}}

    if (imageTypeChoice == "ND") {
	if (endsWith(list3[i], ".nd") ) {
run("Bio-Formats Importer", "open=[" + input3 + list3[i] + "] autoscale color_mode=Composite view=Hyperstack stack_order=XYCZT");
    imageTitle4 = getTitle();
    imagename = getTitle();
zproj(imageTitle4);}}
    
    
    if (imageTypeChoice == "LIF") {
	if (endsWith(list3[i], ".lif") ) {
    var svccCounter = 0;
    file = input3 + list3[i];
run("Bio-Formats Macro Extensions");
Ext.setId(file);
Ext.getSeriesCount(nSeries);
seriesToOpen = newArray(nSeries);  // Initialisation du tableau avec une taille appropriée
sIdx = 0;
// Boucle pour ajouter toutes les séries à ouvrir
for (i = 0; i < nSeries; i++) {
    seriesToOpen[sIdx++] = i + 1;  // Ajouter toutes les séries, en utilisant un index ajusté de +1
}
Array.print(seriesToOpen);
for (s = 0; s < seriesToOpen.length; s++) {
    run("Bio-Formats Importer", "open=[" + file + "] autoscale color_mode=Composite rois_import=[ROI manager] view=Hyperstack stack_order=XYCZT series_list=" + seriesToOpen[s]);
    imageTitle4 = getTitle();
    imagename = getTitle();
zproj(imageTitle4);
}}}

function zproj(imageTitle4) {
waitForUser("Choose first projection plane");
Stack.getPosition(channel, zBeg, frame);
setResult("z.beg", nResults, zBeg);
updateResults();
wait(20); //to avoid an annoying bug due to parallel processing
waitForUser("Choose last projection plane");
Stack.getPosition(channel, zEnd, frame);
setResult("z.end", nResults, zEnd);
updateResults();
imagename = getTitle();
imageTitle3 = File.nameWithoutExtension;
csvContent = File.openAsString(filePath);
csvContent += imagename + "," + zBeg + "," + zEnd + "\n";
File.saveString(csvContent, filePath);
        if (projectionTypechoice == "Max Intensity") {
        	projPrefix = "MAX_";
            run("Z Project...", "start=zBeg stop=zEnd projection=[Max Intensity]");
        } 
        if (projectionTypechoice == "Sum Slices") {
        	projPrefix = "SUM_";
            run("Z Project...", "start=zBeg stop=zEnd projection=[Sum Slices]");
        } 
        if (projectionTypechoice == "Min Intensity") {
        	projPrefix = "MIN_";
            run("Z Project...", "start=zBeg stop=zEnd projection=[Min Intensity]");
        } 
        if (projectionTypechoice == "Average Intensity") {
        	projPrefix = "AVG_";
            run("Z Project...", "start=zBeg stop=zEnd projection=[Average Intensity]");
        }
        if (projectionTypechoice == "Standard Deviation") {
        	projPrefix = "STD_";
            run("Z Project...", "start=zBeg stop=zEnd projection=[Standard Deviation]");
        }
        if (projectionTypechoice == "Median") {
        	projPrefix = "MED_";
            run("Z Project...", "start=zBeg stop=zEnd projection=[Median]");
        }

 if (imageTypeChoice == "LIF") {       
         if (imageTitle4.endsWith("SVCC")) {
        // Save the image with "svg" in the filename and same sequence number
        svccCounter++;
        safeTitle = replace(imageTitle4, "/", "_");
        saveAs("Tiff", output3 + projPrefix + safeTitle + "_" + (s + 1 - svccCounter) + "_SVCC");
    } else {
                // Save the image with the prefix "MERGE_"        
                safeTitle = replace(imageTitle4, "/", "_");
                saveAs("Tiff", output3 + projPrefix + safeTitle + "_" + (s + 1 - svccCounter) );
}
        close(); 
    run("Close All");
}
        
// for nd and tif
	else {
		safeTitle = replace(imageTitle4, "/", "_");
        saveAs("Tiff", output3 + projPrefix + safeTitle);
        close(); 
    run("Close All");
    }   
    
}
}
}

</macro>

-------

<button>
label=Macro
icon=noicon
arg=<macro>
// 1. URL et Chemins universels
url = "https://raw.githubusercontent.com/Leo-KRUTTLI/ACDC-toolbar/refs/heads/main/toolbar/ACDC_popup_macros.txt";
dirActionBar = getDirectory("plugins") + "ActionBar" + File.separator;
fileName = "ACDC_popup_macros.txt";
fullPath = dirActionBar + fileName;

// 2. Tentative de mise à jour
code = File.openUrlAsString(url);

if (startsWith(code, "<Error") || code == "") {
    // Si échec (pas d'internet), on vérifie si on a déjà une version locale
    if (File.exists(fullPath)) {
        showStatus("Mode Hors-ligne : Popup local chargé.");
    } else {
        exit("Erreur : Connexion requise pour le premier téléchargement du popup.");
    }
} else {
    // Si succès, on enregistre/écrase la version locale avec la nouvelle
    if (!File.exists(dirActionBar)) { File.makeDirectory(dirActionBar); }
    File.saveString(code, fullPath);
    showStatus("Popup ACDC mis à jour !");
}

// 3. Lancement (toujours depuis le fichier local)
run("Action Bar", "plugins/ActionBar/" + fileName);
</macro>
--------

</line>
<line>

<button>
icon=_lookuptables/grays.png
arg=run("Grays");

<button>
icon=_lookuptables/red.png
arg=run("Red");

<button>
icon=_lookuptables/green.png
arg=run("Green");

<button>
icon=_lookuptables/blue.png
arg=run("Blue");

<button>
icon=_lookuptables/cyan.png
arg=run("Cyan");

<button>
icon=_lookuptables/magenta.png
arg=run("Magenta");

<button>
icon=_lookuptables/yellow.png
arg=run("Yellow");

---------

<separator>

<button>
icon=_ZoomBar/zoom-out.gif
arg=run("Out");

<button>
icon=_ZoomBar/zoom-100.gif
arg=run("View 100%");

<button>
icon=_ZoomBar/zoom-in.gif
arg=run("In");

</line>

